PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Anagram Experiment
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Routines
  Routine Instr3
    TextComponent Instr3Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        These anagrams will get progressively harder as you continue. So, some of these problems are extremely difficult, but they are all solvable. Please give each problem your best effort and try to solve every problem. Once you submit your answer you will be told whether or not you were right.

        Press the SPACE bar to continue.
    KeyboardComponent Instr3KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr2
    TextComponent Instr2Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In the following task you will be asked to solve two sets of ten anagrams. Each anagram consists of some scrambled letters that you must try to unscramble to form a word.

        Press the SPACE bar to continue.
    KeyboardComponent Instr2KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr1
    TextComponent Instr1Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to the Anagram game
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    KeyboardComponent Instr1KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr4
    TextComponent Instr4Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Before we start the task, let’s start with a practice anagram. When you know the answer type it in using the keyboard and press ENTER to submit the answer.

        Press the SPACE bar to continue.
    KeyboardComponent Instr4KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PracticeAnagram
    TextComponent PracticeAnagramStimulus
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = LIPTU
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    KeyboardComponent PracticeAnagramResponse
      allowedKeys = 'return','backspace','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $originalWord
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys = ""
        inputText=""
      Each Frame:
        i = 0
        while i < len(theseKeys):

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    inputText += theseKeys[i].capitalize()

                i = i + 1
      End Routine:
        if inputText == 'TULIP':
            answerWasCorrect = True
        else:
            answerWasCorrect = False

        inputText = ""
    TextComponent PracticeAnagramInputText
      color = $[0.765,0.451,0.451]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $(inputText)
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    TextComponent PracticeAnagramPressEnterToSubmit
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = Press Enter to submit
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  Routine Instr5
    TextComponent Instr5Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Now, we are ready to begin the anagram game. If you have any questions please let the experimenter know by raising your hand. When you are ready to start the game please press the SPACE bar.
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    KeyboardComponent Instr5KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr8
    TextComponent Instr8Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        "You have \$%.2f." % $gainFramedBalance + \
        '\n\n' + \
        'Please inform the experimenter you finished this part of the experiment.'
    KeyboardComponent Instr8KeyResponse
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr7
    TextComponent Instr7Text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        We said in the beginning that you would be completing 2 sets of 10 anagrams. In this set of 10 you will be starting the game with \$0. If you solve an anagram correctly, you will earn 25 cents. If you solve the anagram incorrectly you won’t earn any money.

        The more anagrams you solve correctly the more money you will win. So, if you want to earn more money, you should try and solve the anagrams correctly. The money in this game is *completely real*.

        When you are ready to start please press the SPACE bar.
    KeyboardComponent Instr7KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GainFramedTrials
    TextComponent GainFramedTrialsText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $(anagram + '\n\n' + inputText + '\n\n' + 'Press Enter to submit')
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    KeyboardComponent GainFramedTrialsKeyResponse
      allowedKeys = 'return','backspace','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $originalWord
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        inputText = ""
        gainFramedBalance = 0
      Begin Routine:
        theseKeys=""
      Each Frame:
        i = 0
        while i < len(theseKeys):

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    inputText += theseKeys[i].capitalize()

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        thisExp.addData('totalResponseTime', GainFramedTrialsKeyResponse.rt[-1])
        thisExp.addData('answerWasCorrect', inputText == originalWord)
  Routine PracticeAnagramFeedback
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        $msg = ''
      Begin Routine:
        if answerWasCorrect:
            msg = 'You’re correct! The answer is TULIP.'
        else:
            msg = 'You’re incorrect! The answer is TULIP.'
      End Routine:
        msg = ''
    TextComponent PracticeAnagramFeedbackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $msg + \
        '\n\n' + \
        'Press SPACE to continue.'
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GainFramedTrialsFeedback
    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        $msg = ''
      Begin Routine:
        if inputText == originalWord:
            gainFramedBalance += 0.25
            msg = 'You’re correct! The answer is %s.\n\nYou won 25 cents.  You now have $%.2f'% (originalWord, gainFramedBalance)
        else:
            msg = 'You’re incorrect! The answer is %s.\n\nYou have $%.2f'% (originalWord, gainFramedBalance)
      End Routine:
        msg = ''
        inputText = ''
    TextComponent GainFramedTrialsFeedbackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $msg + \
        '\n\n' + \
        'Press SPACE to continue.'
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    KeyboardComponent TrialsResponse
      allowedKeys = 'return','backspace','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $originalWord
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys = ""
      Each Frame:
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      End Routine:
        # store the final text string into the results file
        thisExp.addData('inputText', inputText)
        thisExp.addData('totalResponseTime', TrialsResponse.rt[-1])
        thisExp.addData('answerWasCorrect', inputText == originalWord)
    TextComponent TrialsTextAnagram
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $(anagram)
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    TextComponent TrialsTextInputText
      color = $[0.765,0.451,0.451]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $(inputText)
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    TextComponent TrialsTextPressEnterToSubmit
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = Press Enter to submit
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  Routine Feedback
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        $msg = ''
      Begin Routine:
        if inputText == originalWord:
            currentBalance += correctAnswerBalanceAdjustment
            msg = correctAnswerFeedback % (originalWord, currentBalance)
        else:
            currentBalance += incorrectAnswerBalanceAdjustment
            msg = incorrectAnswerFeedback % (originalWord, currentBalance)
      End Routine:
        msg = ''
        inputText = ''
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $msg + \
        '\n\n' + \
        'Press SPACE to continue.'
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine EndBlock
    TextComponent EndLossFrameTrialsText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        'End of this part of the game.' + \
        '\n\n' + \
        "You have \$%.2f." % $currentBalance + \
        '\n\n' + \
        'Please inform the experimenter you finished this part of the experiment.'
    KeyboardComponent EndLossFrameTrialsKeyResponse
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BlockInstructions
    TextComponent Instr6Text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $introText
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    KeyboardComponent Instr6KeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent currentBalance
      startRoutineValue = $startingBalance
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Flow
  Routine Instr1
  Routine Instr2
  Routine Instr3
  Routine Instr4
  Routine PracticeAnagram
  Routine PracticeAnagramFeedback
  Routine Instr5
  LoopInitiator BlocksLoop loopType="TrialHandler"
    conditionsFile = Group A - Loss-framed then gain-framed.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('conditionsFile', 'Loss-Framed Trials.xlsx'), ('introText', 'We said in the beginning that you would be completing 2 sets of 10 anagrams. In this set of 10 you will be starting the game with \\$2.50. If you solve an anagram incorrectly, you will lose 25 cents. If you solve the anagram correctly you won’t lose any money.\n\nThe more anagrams you solve incorrectly the more money you will lose. So, if you want to avoid losing money from your total, you should try and solve the anagrams correctly. The money in this game is *completely real*.\n\nWhen you are ready to start please pre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,
      OrderedDict([('conditionsFile', 'Gain-Framed Trials.xlsx'), ('introText', 'We said in the beginning that you would be completing 2 sets of 10 anagrams. In this set of 10 you will be starting the game with \\$0. If you solve an anagram correctly, you will earn 25 cents. If you solve the anagram incorrectly you won’t earn any money. \n\nThe more anagrams you solve correctly the more money you will win. So, if you want to earn more money, you should try and solve the anagrams correctly. The money in this game is *completely real*.\n\nWhen you are ready to start please press the SPACE bar.'), ('st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
    Routine BlockInstructions
    LoopInitiator TrialsLoop loopType="TrialHandler"
      conditionsFile = $conditionsFile
      loopType = sequential
      nReps = 1
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      Routine Trial
      Routine Feedback
    LoopTerminator TrialsLoop
    Routine EndBlock
  LoopTerminator BlocksLoop
