PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = Effort Experiment
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Routines
  Routine Instr1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to the Gain Loss Effort Game.
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        For this part of the experiment you will be playing a game that involves pressing the space bar in order
        to win money and avoid losing money.

        Press ENTER to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr3
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        First, we would like to get a baseline measure of how fast you can press the space in 30 seconds.

        When you see the word ‘GO’ on the next screen press the space bar as many times as you can for 30 seconds.

        Press ENTER when you are ready to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        user_met_the_threshold = False
      Begin Routine:
        number_of_presses = 0
      Each Frame:
        number_of_presses = len(TrialResponse.keys)

        if number_of_presses >= int(threshold):
            continueRoutine = False
      End Routine:
        if number_of_presses >= int(threshold):
            user_met_the_threshold = True
            totalEarned = float(totalEarned) + amountWonIfSuccess
        else:
            user_met_the_threshold = False
            totalEarned = float(totalEarned) - amountLostIfFailure

        thisExp.addData('numberOfButtonPresses', len(TrialResponse.keys))
        thisExp.addData('userMetTheThreshold', user_met_the_threshold)

        if len(TrialResponse.rt) > 0:
            thisExp.addData('timeOfLastButtonPress', TrialResponse.rt[-1])
        else:
            thisExp.addData('timeOfLastButtonPress', None)
    TextComponent TrialTextKeepPressingSpaceBar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text [set every frame]:
        'GO' + \
        '\n\n' + \
        '%s' % $trialText + \
        '\n\n' + \
        'The computer is currently recording your key presses.'
    KeyboardComponent TrialResponse
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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  Routine BlockInstructions
    TextComponent text_4
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $introText
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent totalEarned
      startRoutineValue = $startingAmount
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  Routine EndBlock
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        'Your total is \$%.2f.' % $totalEarned + \
        '\n\n' + \
        'Please inform the experimenter that you finished this part of the experiment.'
    KeyboardComponent key_resp_8
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        # Fix an issue where a $0 totalEarned was being saved to the Excel workbook as "1.38777878078144E-16"
        if totalEarned < 0.1:
            totalEarned = 0

        thisExp.addData('totalEarnedForThisBlock', totalEarned)
  Routine Feedback
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        msg = ''

        if user_met_the_threshold:
            msg = successMessage
        else:
            msg = failureMessage
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $msg + \
        '\n\n' + \
        'Press ENTER to continue.'
    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine StartScreen
    TextComponent StartScreenText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        'Your current total is \$%.2f.' % $totalEarned + \
        '\n\n' + \
        'Press ENTER to begin.'
    KeyboardComponent key_resp_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TrialReady
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Ready...
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  Routine TrialSet
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ...Set...
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  Routine BaselineTrial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        number_of_presses = 0
      Each Frame:
        number_of_presses = len(key_resp_5.keys)
      End Routine:
        thisExp.addData('baselineNumberOfPresses', len(key_resp_5.keys))
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text [set every frame]:
        GO

        The computer is currently recording your key presses.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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  Routine BaselineReady
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Ready...
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  Routine BaselineSet
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ...Set...
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Flow
  Routine Instr1
  Routine Instr2
  Routine Instr3
  Routine BaselineReady
  Routine BaselineSet
  Routine BaselineTrial
  LoopInitiator BlocksLoop loopType="TrialHandler"
    conditionsFile = Group A - Gain-framed then loss-framed.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('conditionsFile', 'Gain-Framed Trials.xlsx'), ('introText', 'In this part of the game you can earn money by pressing on the space bar on the keyboard in front of you. How much money you earn depends on many times you press the space bar. A message on the screen will tell you how much money you earned.\n\nThere are 10 trials and you can earn 10 cents per trial if you press the space bar enough times. Your task is to try and earn as much money as you can. You may stop at any time. If you do not click on the space bar for 15 seconds the game will end.\n\nWhen you are ready please p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,
      OrderedDict([('conditionsFile', 'Loss-Framed Trials.xlsx'), ('introText', 'In this part of the game you will be given some money you can lose. Your task is to try and keep as much money as you can. You can avoid losing money by pressing the space bar on the keyboard in front of you. How much money you keep depend on how many times you press the space bar.\n\nThere are 10 trials and you can lose 10 cents per trial if you don’t press the space bar enough times. You may stop at any time. If you do not click on the space bar for 30 seconds the game will end.\n\nWhen you are ready please press ENTE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
    Routine BlockInstructions
    LoopInitiator TrialsLoop loopType="TrialHandler"
      conditionsFile = $conditionsFile
      loopType = sequential
      nReps = 1
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      Routine StartScreen
      Routine TrialReady
      Routine TrialSet
      Routine Trial
      Routine Feedback
    LoopTerminator TrialsLoop
    Routine EndBlock
  LoopTerminator BlocksLoop
